PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 720]
  color = black
  expName = TSN_Jan_31_2020
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Routines
  Routine StudyImage
    ImageComponent StudyPic
      image [set every repeat] = $PicStim
      size = (.8, .6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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  Routine CodeInit
    CodeComponent codeInit
      Code Type = Py
      Begin Experiment:
        import random, xlrd

        #randomize the seed
        random.seed()

        #test stimuli file
        infile = 'pics160_wide.xlsx'

        #num of pics in each type
        num_pic = 32

        #num of different types of pics
        num_type = 5

        #number of 5-trial blocks
        num_blocks = 32

        #number of sections of the experiment (gives break and EEG touch-up time)
        num_sections = 4

        #number of blocks per section
        num_secblock = 8

        #total number of pics
        num_pictot = 160

        #number of practice items
        num_prac = 5

        #Start the trial counter
        cur_pic = 0
  Routine CodeTrial
    CodeComponent codeTrial
      Code Type = Py
      Begin Experiment:
        #create a pic order and shuffle it.
        #pic_order = list(range(num_type))
        #random.shuffle(pic_order)

        #create an array that adds each displayed pic so we can rate l8r
        stim_order = []
      Begin Routine:
        #assign picture for the current trial
        PicStim = pic_block[cur_pic]

        #create a jittered delay between picture presentation and SAM rating.
        #Note that this makes it range from 2 to 3.
        RateDelay = random.random() * (3-2) + 2
        RateDelay = round(RateDelay, 1)

        #create a jittered ITI. Note this makes it range from 2 to 3
        ITI = random.random() * (3-2) + 2
        ITI = round(ITI, 1)

        #above is what it should be! BUT let's speed up the ITI so I can troubleshoot.
        #RateDelay = .25
        #ITI = .25
      End Experiment:
        #can print the stim_order to cross-check with output file.
        print(stim_order)
      End Routine:
        #create an ongoing list of pics they viewed so we can rate l8r.
        stim_order.append(PicStim)

        #Saving the picture type

        pic_type = []

        if 'fear' in PicStim:
            pic_type = 'nega'

        elif 'happy' in PicStim:
            pic_type = 'posi'

        elif 'neutral' in PicStim:
            pic_type = 'neut'

        elif 'Security' in PicStim:
            pic_type = 'warn'
        else:
            pic_type = 'onli'


        #log important info to datafile
        thisExp.addData('cur_section', cur_section)
        thisExp.addData('cur_block', cur_block)
        thisExp.addData('PicStim', PicStim)
        thisExp.addData('pic_type', pic_type)
        thisExp.addData('cur_pic', cur_pic + 1)
        thisExp.addData('RateDelay', RateDelay)
        thisExp.addData('ITI', ITI)

        #Get the current picture to update counter
        cur_pic = cur_pic + 1
  Routine RatingInstr
    TextComponent textwelcome
      letterHeight = 0.075
      pos = (0, .7)
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Welcome to the experiment! You will be shown a series of pictures. First, the picture will appear on its own. Please observe the picture carefully.

        After a short delay, you will be asked to rate how the picture makes you feel on the following two 5-point scales (you will enter your response by moving the left and right arrow keys and pressing 'enter'):
    ImageComponent PicValence
      image = SAM/Redondo2007_Valence_5pt_prac.jpg
      size = (1.2, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent PicArousal
      image = SAM/Redondo2007_Arousal_5pt_prac.jpg
      pos = (0, -0.7)
      size = (1.2, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent RatingInstrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textValence
      letterHeight = 0.075
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = The Unhappy vs. Happy Scale:
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    TextComponent textArousal
      letterHeight = 0.075
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = The Calm vs. Excited Scale:
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  Routine GetResearcher
    TextComponent textgetresearch
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thanks for viewing the pictures! Please ring the bell to summon the researcher.
      wrapWidth = 1.75
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    KeyboardComponent key_resp
      allowedKeys = 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CodeSAM
    CodeComponent codeSAM
      Code Type = Py
      Begin Experiment:
        #load in the SAM images, which are on the second sheet.

        insheetSAM = inbook.sheet_by_index(1)

        #rating scale pics
        pic_val = []
        pic_aro = []

        #load in pics
        for rowx in range(0, 1):

            #read in the values of all columns on this row
            row = insheetSAM.row_values(rowx)

            #print out values to see what happens
            #print(row[0, 1, 2, 3]

            #saving the pics to the appropriate array
            pic_val.append(row[0])
            pic_aro.append(row[1])

            print(pic_val, pic_aro)
  Routine CodeRate
    CodeComponent codeRate
      Code Type = Py
      Begin Experiment:
        #start the current pic rating counter.
        cur_rating = 0
      End Routine:
        #update the rating counter and save it
        cur_rating = cur_rating + 1
        thisExp.addData('cur_rating', cur_rating)
  Routine RateArousal
    ImageComponent SAMArousal
      image = SAM/Redondo2007_Arousal_5pt_test.jpg
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent ratingArousal
      forceEndRoutine = True
      high = 5
      labels = 1,2,3,4,5
      low = 1
      markerStart = 3
      pos = 0, -0.5
      size = 1.35
      startVal [time (s)] = 0.0
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    TextComponent RateArousaltxt
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please rate how the picture you just saw made you feel on the following 5-point scale:
      wrapWidth = 2
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  Routine StudyEnd
    TextComponent Endtext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you! The experiment will close automatically in 5 seconds.
      wrapWidth = 1.75
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  Routine Blank250
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .25
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  Routine CodeBlock
    CodeComponent codeBlock
      Code Type = Py
      Begin Experiment:
        #counter for the current block
        cur_block = 0

        #access the xls stimulusfile
        inbook = xlrd.open_workbook(infile)
        insheet = inbook.sheet_by_index(0)

        #arrays for our stimuli
        pic_nega = []
        pic_posi = []
        pic_neut = []
        pic_warn = []
        pic_onli = []

        #read the stimuli from our sheet

        #load in pics
        for rowx in range(1, num_pic + 1):

            #read in the values of all columns on this row
            row = insheet.row_values(rowx)

            #print out values to see what happens
            #print(row[0, 1, 2, 3, 4]

            #saving the pics to the appropriate array
            pic_nega.append(row[0])
            pic_posi.append(row[1])
            pic_neut.append(row[2])
            pic_warn.append(row[3])
            pic_onli.append(row[4])

        #randomizes the order of the four picture arrays
        random.shuffle(pic_nega)
        random.shuffle(pic_posi)
        random.shuffle(pic_neut)
        random.shuffle(pic_warn)
        random.shuffle(pic_onli)
        #print(pic_neg, pic_pos, pic_neu, pic_war)


        #create array of all the picture arrays.

        pics = [pic_nega, pic_posi, pic_neut, pic_warn, pic_onli]

        #let's take a look. [0][0] means first item of first array.
        #print(str(pic_order[0][0]) + " " + str(pic_order[1][0]) + " " + str(pic_order[2][0]) + " " + str(pic_order[3][0]))
        #print(str(pic_order[0][1]) + " " + str(pic_order[1][1]) + " " + str(pic_order[2][1]) + " " + str(pic_order[3][1]))
      Begin Routine:
        #pull the five photos we will need for this block and shuffle
        pic_block = [pics[0][cur_block], pics[1][cur_block], pics[2][cur_block], pics[3][cur_block], pics[4][cur_block]]
        random.shuffle(pic_block)

        #set pic counter
        cur_pic = 0
      End Routine:
        #save the block number
        thisExp.addData('cur_block', cur_block + 1)

        #Get the current block to update counter
        cur_block = cur_block + 1
  Routine CodeSection
    CodeComponent codeSection
      Code Type = Py
      Begin Experiment:
        #start the section counter.

        cur_section = 0
      End Routine:
        #save the section number
        thisExp.addData('cur_section', cur_section + 1)

        #Get the current section to update counter
        cur_section = cur_section + 1
  Routine BreakScreen
    TextComponent BreakText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $textbreak
      wrapWidth = $1.75
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    KeyboardComponent Cont_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank2000
    TextComponent FixationCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine PauseRoutine
  Routine RateDelay
    TextComponent DelayBlack
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $RateDelay
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  Routine CrudeRate
    TextComponent txtCrudeRate
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Please rate the previous picture by pressing:

        1 for positive

        2 for neutral

        3 for negative
    KeyboardComponent CrudeRatekeypress
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent FixationCross2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ITI
      text = +
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  Routine BreakCode
    CodeComponent codeBreak
      Code Type = Py
      Begin Routine:
        #Create break screen text so that the first three are breaks, and the fourth is to take the cap off.

        if cur_section < 4:
            textbreak = f'You are at a scheduled break! Please wait for the researcher to come in and adjust your cap. Once the cap is adjusted, they will close the door and start the experiment again for you.'
        else:
            textbreak = f'You have completed the EEG portion of the experiment! Please press the s key on the keyboard and wait for the researcher to come in and remove your cap.'
  Routine RateValence
    ImageComponent SAMValence
      image = SAM/Redondo2007_Valence_5pt_test.jpg
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent ratingValence
      forceEndRoutine = True
      high = 5
      labels = 1,2,3,4,5
      low = 1
      markerStart = 3
      pos = 0, -0.5
      size = 1.35
      startVal [time (s)] = 0.0
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    TextComponent rateValencetxt
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please rate how the picture you just saw made you feel on the following 5-point scale:
      wrapWidth = 2
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  Routine SampleValence
    ImageComponent SampleValencepic
      image = SAM/Redondo2007_Valence_5pt_prac.jpg
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent sampleratingval
      forceEndRoutine = True
      high = 9
      low = 1
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent SampleValencetxt
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please rate how the picture you just saw made you feel on the following 9-point scale:
      wrapWidth = 2
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  Routine SampleArousal
    ImageComponent SampleArousalpic
      image = SAM/Redondo2007_Arousal_5pt_prac.jpg
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    RatingScaleComponent sampleratingaro
      forceEndRoutine = True
      high = 9
      low = 1
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent SampleArousaltxt
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please rate how the picture you just saw made you feel on the following 9-point scale:
      wrapWidth = 2
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  Routine test
    ImageComponent imagetest
      image = SAM/onli01.jpg
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      units = height
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  Routine ExpStart
    TextComponent ExpStartText
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        This is the end of the practice.


        There are three breaks scheduled in the experiment, during which the researchers will come in and adjust your cap.


        When you are ready, the researcher will close the door and start the experiment for you.
    KeyboardComponent RespStartExp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SampleItem
    KeyboardComponent sampleitempress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent sampletext
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = Let's do some practice items. Press 'space' when you are ready to start.
      wrapWidth = 1.75
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  Routine SampleDelay
    TextComponent sampledelayscreen
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine PracticeCode
    CodeComponent codePrac
      Code Type = Py
      Begin Experiment:
        #counter for the current practice pic
        curpic_prac = 0

        #access the second sheet of the xls file, where the practice items are
        inbook = xlrd.open_workbook(infile)
        insheet = inbook.sheet_by_index(1)

        #array for practice stimuli
        pic_prac = []

        #read the stimuli from our sheet

        #load in pics
        for rowx in range(0, num_prac):

            #read in the values of all columns on this row
            row = insheet.row_values(rowx)

            #saving the pics to the array
            pic_prac.append(row[0])


        #randomizes the order of the practice pics
        random.shuffle(pic_prac)


        #assign picture for the first trial
        PracStim = pic_prac[curpic_prac]
      Begin Routine:
        #assign picture for the current trial
        PracStim = pic_prac[curpic_prac]

        #create a jittered delay between picture presentation and SAM rating.
        #Note that this makes it range from 2 to 3.
        RateDelay = random.random() * (3-2) + 2
        RateDelay = round(RateDelay, 1)

        #create a jittered ITI. Note this makes it range from 2 to 3
        ITI = random.random() * (3-2) + 2
        ITI = round(ITI, 1)

        #above is what it should be! BUT let's speed up the ITI so I can troubleshoot.
        #RateDelay = .25
        #ITI = .25
      End Routine:
        #Saving the picture type

        pic_type = []

        if 'fear' in PracStim:
            pic_type = 'nega'

        elif 'happy' in PracStim:
            pic_type = 'posi'

        elif 'neut' in PracStim:
            pic_type = 'neut'

        elif 'warn' in PracStim:
            pic_type = 'warn'
        else:
            pic_type = 'onli'


        #log important info to datafile
        thisExp.addData('PracStim', PracStim)
        thisExp.addData('pic_type', pic_type)
        thisExp.addData('curpic_prac', curpic_prac + 1)
        thisExp.addData('RateDelay', RateDelay)
        thisExp.addData('ITI', ITI)

        #Get the current picture to update counter
        curpic_prac = curpic_prac + 1
  Routine PracticeImage
    ImageComponent Samplepic
      image [set every repeat] = $PracStim
      size = (0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = height
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Flow
  Routine CodeInit
  Routine RatingInstr
  Routine SampleItem
  Routine Blank2000
  LoopInitiator practiceloop loopType="TrialHandler"
    loopType = random
    nReps = $num_prac
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    Routine PracticeCode
    Routine PracticeImage
    Routine RateDelay
    Routine RateValence
    Routine Blank250
    Routine RateArousal
    Routine ITI
  LoopTerminator practiceloop
  Routine ExpStart
  LoopInitiator SectionLoop loopType="TrialHandler"
    loopType = random
    nReps = $num_sections
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    Routine CodeSection
    Routine Blank2000
    LoopInitiator BlockLoop loopType="TrialHandler"
      loopType = random
      nReps = $num_secblock
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      Routine CodeBlock
      LoopInitiator TrialLoop loopType="TrialHandler"
        loopType = random
        nReps = $num_type
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        Routine CodeTrial
        Routine StudyImage
        Routine RateDelay
        Routine CodeRate
        Routine RateValence
        Routine Blank250
        Routine RateArousal
        Routine ITI
      LoopTerminator TrialLoop
    LoopTerminator BlockLoop
    Routine BreakCode
    Routine BreakScreen
  LoopTerminator SectionLoop
  Routine StudyEnd
