PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = black
  expName = TSN_PostQ_Feb_13_2020
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Routines
  Routine securityQs
    FormComponent formSecurityQs
      Data Format = rows
      Item Padding = 0.08
      Items = VanceQs.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1.6, 0.7)
      Text Height = 0.025
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent codeSecurityQs
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.4))
      Each Frame:
        continueButton.draw()

        if formSecurityQs.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
    TextComponent securityQinstr
      letterHeight = 0.035
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please answer the following questions by rating them on a scale between 1 (strongly disagree) and 5 (strongly agree).
      wrapWidth = 1.2
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  Routine intro
    TextComponent textIntro
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 1.2
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      text:
        Please answer all of the following questions truthfully; all information collected through this questionnaire will be kept confidential. The answers will be anonymized and cannot be traced back to you as an individual.

        Press the space bar to start the questionnaire.
    KeyboardComponent respIntro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VanceQs
  Routine age
    TextComponent ageinstr
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How old are you? (please type your answer in and press enter)
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    CodeComponent codeage
      Code Type = Both
      Begin JS Routine:
        modify = False;
        text.text = '';
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("age", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("age", text.text)
    TextComponent text
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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  Routine edu
    TextComponent eduinstr
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = How many years of post-secondary education have you completed? (please type your answer in and press enter)
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    TextComponent text_2
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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    CodeComponent codeedu
      Code Type = Both
      Begin JS Routine:
        modify = False;
        text_2.text = '';
      Begin Routine:
        modify = False
        text_2.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_2.text = text_2.text + ' '
            elif 'backspace' in keys:
                text_2.text = text_2.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_2.text = text_2.text + keys[0].upper()
                    modify = False
                else:
                    text_2.text = text_2.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_2.text = text_2.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_2.text = text_2.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_2.text = text_2.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("edu_yrs", text_2.text)
        text_2.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("edu_yrs", text_2.text)
  Routine demog
    FormComponent formDemog
      Data Format = rows
      Item Padding = 0.08
      Items = demographics.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1.3, 0.7)
      Text Height = 0.025
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent codeformDemog
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.4))
      Each Frame:
        continueButton.draw()

        if formDemog.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
  Routine secQs_2
    FormComponent formsecQs2
      Data Format = rows
      Item Padding = 0.08
      Items = secQs2.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1.3, 0.7)
      Text Height = 0.025
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent codesecQs2
      Code Type = Py
      Begin Routine:
        continueButton = visual.ButtonStim(win, labelText= "Continue", pos=(.35, -.4))
      Each Frame:
        continueButton.draw()

        if formsecQs2.formComplete():
            continueButton.buttonEnabled = True

        if continueButton.buttonSelected:
            continueRoutine = False
  Routine EndScreen
    TextComponent endtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = You have completed the questionnaire! This page will close automatically in 5 seconds. 
      wrapWidth = 1.2
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Flow
  Routine intro
  Routine age
  Routine edu
  Routine demog
  Routine secQs_2
  Routine securityQs
  Routine EndScreen
